'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 1
' Initial_Processdelay           = 10000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.4.0
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = JOSH-LAPTOP  JOSH-LAPTOP\joshu
'<Header End>

#Include ADwinPro2.Inc
#Include Math.inc

'hard coded settings
#define output_card       3
#define output_channel    8
#define gate_channel      7
#define input_card        2
#define input_channel     8
#define version           02010001h 'Version: Electromigration.readout.0.1

#define process_time      2E-6      'time of one event cycle (=500kHz)
#define DAC_ZERO          32768     '16-bit zero
#define DAC_ZERO_18       131072    '18-bit zero
#define fifo_len          1000003   'fifo length

'communication PC ADwin
#define fw_version          Par_1
#define readout_active      Par_3       'readout active flag
#define emergency_stop      Par_12      'emergency stop
#define voltage             Par_38      'last voltage applied
#define report_voltage      Par_8       'source-drain voltage to start abort script (bits)
#define r_limit             Par_9       'resist boundary to stop sweep (bits)
#define sample_rate         FPar_8      'command from PC: set sample rate (Hz) for subsampling
#define report_sample_rate  FPar_9      'report to PC: current sample rate (Hz)
#define fifo_raw            Data_1


'EVENT VARIABLES
dim sweep_in as long
dim subsampling_counter, subsampling_samples as long
dim resist as float
dim fifo_raw[fifo_len] as float as fifo


init:
  'SET PROCESSDELAY
#IF Processor = T12 THEN
  Processdelay = process_time * 1e9
#ELSE
  Processdelay = process_time * 300e6
#ENDIF
  
  fw_version = version
  'CLEAR TRANSMITTION FIFO
  fifo_clear(1)

  ' INITIALIZE SUBSAMPLING
  subsampling_samples = Round(1 / (sample_rate * process_time))
  report_sample_rate = 1 / (subsampling_samples * process_time)
  subsampling_counter = 1

  emergency_stop = 0
  readout_active = 1

  'ACTIVTATE TIMER MODE FOR 18-BIT INPUT CARD (MUST BE AT THE END OF INIT)
  P2_ADCF_Mode(input_card, 1)

event:  
  'READ INPUT
  sweep_in = P2_Read_ADCF24(input_card, input_channel) '18-bit resolution  
  
  '24 -> 18 BIT AND -OFFSET
  sweep_in = Shift_Right(sweep_in, 6) - DAC_ZERO_18
  
  'CHECK EMERGENCY STOP
  if (emergency_stop <> 0) then
    'SET OUTPUT TO ZERO
    P2_DAC(output_card, output_channel, DAC_ZERO)
    voltage = DAC_ZERO

    'STOP SWEEP AND READOUT PROCESS
    Stop_Process(2)
    End
  endif
  
    'CHECK VOLTAGE TO REPORT
    if (voltage >= report_voltage) then

      'CALCULATE RESISTANCE
      resist = (voltage-DAC_ZERO)/(sweep_in)
    
      'COMPARE WITH RESISTANCE LIMIT
      if ((r_limit <> 0) and (r_limit <= resist)) then

        'SET OUTPUT TO ZERO
        P2_DAC(output_card, output_channel, DAC_ZERO)
        voltage = DAC_ZERO

        'STOP SWEEP AND READOUT PROCESS
        Stop_Process(2)
        End
      endif
    
      'SUBSAMPLE
      if (subsampling_counter < subsampling_samples) then
        Inc subsampling_counter
      else
        subsampling_counter = 1
        'SEND DATAPOINT TO FIFO (27cycles per FIFO with no sweep)
        fifo_raw = sweep_in
      endif
    endif

finish:
  'SEND LAST INPUT TO FIFO (no subsampling!)
  fifo_raw = sweep_in

  'SET READOUT INACTIVE
  readout_active = 0
